PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = cuesTask
  Screen = 1
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Routines
  Routine trials
    ImageComponent image
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 1
      image [set every repeat] = $stimFile
      size = 2
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    ImageComponent cross
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = images/fixCross.jpg
      size = 2
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  Routine randomIndex
    CodeComponent shufflingIndex
      Begin Routine:
        shuffle(allRows) #randomize the order of the index
  Routine index
    CodeComponent shuffleCode
      Begin Experiment:
        allRows=range(18)
        shuffle(allRows) #randomize the order of the indices
Flow
  Routine index
  LoopInitiator blocksLoop loopType="TrialHandler"
    conditionsFile = chooseBlock.csv
    isTrials = False
    loopType = sequential
    nReps = 9
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    Routine randomIndex
    LoopInitiator trialsLoop loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
      Selected rows = $allRows[:6]
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      Routine trials
    LoopTerminator trialsLoop
  LoopTerminator blocksLoop
